PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = suzi_tom
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Routines
  Routine setup_for_exp
    CodeComponent setup
      Code Type = Auto->JS
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      Begin Experiment:
        block1=[]
        block2=[]
        block3=[]
        block4=[]
        blocks=[]
        list_F=[]
        list_N=[]
        short_time=0.25
        long_time=1
        num_of_lists=16
        lists_in_block=4
        words=[]
    ImageComponent image
      image = intro\Slide4.PNG
      size = (1.7,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine check
    CodeComponent code
      Code Type = Auto->JS
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = all_list[0]
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  Routine orgenize_blocks
    CodeComponent orgenize_files
      Code Type = Auto->JS
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      Begin Experiment:
        word_counter=0
        list_counter=0
        block_counter=0
      Begin Routine:
        shuffle(list_F[:num_of_lists])
        shuffle(list_N[:num_of_lists])
        shuffle(list_F[num_of_lists:])
        shuffle(list_N[num_of_lists:])
        for l in range(0,lists_in_block):
            block1.append(list_F[l])
            block1.append(list_N[l])
        for l in range(lists_in_block,2*lists_in_block):
            block2.append(list_F[l])
            block2.append(list_N[l])
        for l in range(2*lists_in_block,3*lists_in_block):
            block3.append(list_F[l])
            block3.append(list_N[l])
        for l in range(3*lists_in_block,4*lists_in_block):
            block4.append(list_F[l])
            block4.append(list_N[l])
        blocks.append(block1)
        blocks.append(block2)
        blocks.append(block3)
        blocks.append(block4)
        for block in blocks:
            shuffle(block)
            print(block)
            print(" / ")
  Routine words_loader
    CodeComponent trial_word
      Code Type = Auto->JS
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      Begin Experiment:
        current_file_name=""
      Begin Routine:
        if word_counter==0 or word_counter==6 or word_counter==11:
            current_file_name=blocks[block_counter][list_counter][0]
            words.append([word,current_file_name,0])
        time_show=blocks[block_counter][list_counter][1]
        print(words[0][1])
        word_counter+=1
    TextComponent showing_the_stim
      languageStyle = RTL
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $word
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  Routine insert_other
    CodeComponent insert_other_words
      Code Type = Auto->JS
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      Begin Routine:
        current_file_name=blocks[block_counter][list_counter][0]
        words.append([word,current_file_name,1])
  Routine test
    CodeComponent words_test
      Code Type = Auto->JS
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      Begin Experiment:
        new_word="המילה בטוח חדשה"
        old_word="המילה בטוח ישנה"
        current_word=""
        current_test_word=0
        word_type=-1
        word_file=""
        correct_answer=0
        correct_rating=0
      Begin Routine:
        current_word=words[current_test_word][0]
        word_type=words[current_test_word][2]
        word_file=words[current_test_word][1]
      End Routine:
        current_test_word+=1
        key_ratings=rating_test.keys
        key_rating=int(key_ratings[0])
        if word_type==0:
            if key_rating>3 and key_rating<7:
                correct_answer=1
            else:
                correcot_answer=0
            correct_rating=key_rating
        else:
            if key_rating>0 and key_rating<4:
                correct_answer=1
            else:
                correct_answer=0
            correct_rating= -1*key_rating+7
    KeyboardComponent rating_test
      allowedKeys [set every repeat] = '1','2','3','4','5','6'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    VariableComponent correct_raiting_for_answer
      saveStartStop = False
      startExpValue = 0
      startRoutineValue = correct_rating
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    VariableComponent correct
      saveStartStop = False
      startExpValue = 0
      startRoutineValue = correct_answer
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    VariableComponent scoring_word
      saveStartStop = False
      startRoutineValue = current_word
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    TextComponent new_word_label
      languageStyle = RTL
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $new_word
    TextComponent old_word_label
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $old_word
    TextComponent show_word
      languageStyle = RTL
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_word
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    VariableComponent worf_list_name
      saveStartStop = False
      startRoutineValue = word_file
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    VariableComponent word_type
      saveStartStop = False
      startRoutineValue = word_type
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    TextComponent var_1_label
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent var_2_label
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent three_label
      color = black
      letterHeight = 0.05
      pos = (-0.1, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent four_label
      color = black
      letterHeight = 0.05
      pos = (0.1, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent five_label
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    TextComponent six_label
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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  Routine record_lists
    VariableComponent list_name
      saveStartStop = False
      startRoutineValue = blocks[block_counter][list_counter][0]
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    VariableComponent list_time
      saveStartStop = False
      startRoutineValue = blocks[block_counter][list_counter][1]
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    CodeComponent reset_words
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(words)
        word_counter=0
        list_counter+=1
  Routine lists_order
    CodeComponent list_of_files
      Code Type = Auto->JS
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      Begin Experiment:
        count_list=0
      Begin Routine:
        if count_list%2==0:
            list_F.append([file_F,short_time])
            list_N.append([file_N,short_time])
        else:
            list_F.append([file_F,long_time])
            list_N.append([file_N,long_time])
        count_list+=1
  Routine record_block
    CodeComponent blocks_update
      Code Type = Auto->JS
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      Begin Routine:
        word_counter=0
        list_counter=0
        words=[]
        block_counter+=1
        current_test_word=0
    TextComponent text_end_of_block
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine demographics
    FormComponent demographics_for_
      Data Format = rows
      Font = Arial
      Item Padding = 0.05
      Items = demographics.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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    ButtonComponent next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.7, -0.5)
      size = (0.1,0.1)
      startVal [time (s)] = 0
      text = ->
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  Routine start_test
    TextComponent text_4
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        מבחן חלק:
    TextComponent text_6
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $block_counter+1
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  Routine train
    CodeComponent train_insert_word
      Code Type = Auto->JS
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      Begin Experiment:
        train_words=[]
        show_train_word=""
      Begin Routine:
        train_words.append(word)
        show_train_word=word
    TextComponent tezt_train
      languageStyle = RTL
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $show_train_word
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  Routine training_test
    CodeComponent words_test_2
      Code Type = Auto->JS
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      Begin Experiment:
        new_word="המילה בטוח חדשה"
        old_word="המילה בטוח ישנה"
        current_train_word=""
        counter_train_word=0
      Begin Routine:
        current_train_word=train_words[counter_train_word]
      End Routine:
        counter_train_word+=1
    SliderComponent slider_2
      color [set every repeat] = black
      forceEndRoutine = True
      granularity = 0
      labels = "1","6"
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      storeRatingTime = False
      styles = radio
      ticks = 1, 2, 3, 4, 5, 6
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    TextComponent six_tick
      color = black
      letterHeight = 0.05
      pos = (0.5, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 6
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    TextComponent one_tick
      color = black
      letterHeight = 0.05
      pos = (-0.5, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = 1
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    TextComponent new_word_label_2
      languageStyle = RTL
      letterHeight = 0.05
      pos = (-0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $new_word 
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    TextComponent old_word_label_2
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0.5, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $old_word
    TextComponent text_train_word
      languageStyle = RTL
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $current_train_word
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    TextComponent two_tick
      color = black
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent three_tick
      color = black
      letterHeight = 0.05
      pos = (-0.1, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent four_tick
      color = black
      letterHeight = 0.05
      pos = (0.1, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 4
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    TextComponent five_tick
      color = black
      letterHeight = 0.05
      pos = (0.3, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 5
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    KeyboardComponent rating
      allowedKeys [set every repeat] = '1','2','3','4','5','6'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine strat_train_test
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(train_words)
    TextComponent training_text
      languageStyle = RTL
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = מבחן לדוגמה מתחיל
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  Routine end_block
    ImageComponent ending
      image = intro\Slide3.PNG
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine insert_target_word
    CodeComponent inserting_target_word
      Code Type = Auto->JS
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      Begin Routine:
        current_file_name=blocks[block_counter][list_counter][0]
        words.append([word,current_file_name,2])
  Routine intro
    ImageComponent intro_text
      image = intro\Slide1.PNG
      size = (1.7,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_of_training
    CodeComponent check_res
      Code Type = Auto->JS
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      End Routine:
        print(next_key.keys[0])
        if next_key.keys[0]=='space':
            training_and_test_loop.finished=True
    ImageComponent test_end_text
      image = intro\Slide2.PNG
      size = (2,1)
      startVal [time (s)] = 0.0
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    KeyboardComponent next_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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  Routine part_start
    TextComponent text_2
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text [set every repeat]:
        חלק
    TextComponent text_3
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_counter+1
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  Routine list_part
    TextComponent number_list
      languageStyle = RTL
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        רשימה
    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $list_counter+1
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  Routine empty_train
    TextComponent blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine empty_test
    TextComponent blank_times
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_show
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Flow
  Routine setup_for_exp
  Routine demographics
  Routine intro
  LoopInitiator training_and_test_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator training_loop loopType="TrialHandler"
      Selected rows = 1:13
      conditionsFile = firsttest.xlsx
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
        [{'word': 'קלסר'},
        {'word': 'דובדבן'},
        {'word': 'גשם'},
        {'word': 'מורה'},
        {'word': 'דף'},
        {'word': 'אלבום'},
        {'word': 'כיתה'},
        {'word': 'טלוויזיה'},
        {'word': 'אמר'},
        {'word': 'החליט'},
        {'word': 'תמונה'},
        {'word': 'חשיפה'},
        {'word': 'קיבל'},
        {'word': 'מצפון'},
        {'word': None},
        {'word': None}]
      Routine train
      Routine empty_train
    LoopTerminator training_loop
    Routine strat_train_test
    LoopInitiator training_test_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 5
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      Routine training_test
    LoopTerminator training_test_loop
    Routine end_of_training
  LoopTerminator training_and_test_loop
  LoopInitiator lists_names loopType="TrialHandler"
    conditionsFile = file_names1.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'name_N': 'bread', 'name_F': 'alone', 'file_N': 'lists\\bread.xlsx', 'file_F': 'lists\\alone.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'car', 'name_F': 'needles', 'file_N': 'lists\\car.xlsx', 'file_F': 'lists\needles.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'chair', 'name_F': 'anger', 'file_N': 'lists\\chair.xlsx', 'file_F': 'lists\\anger.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'city', 'name_F': 'army', 'file_N': 'lists\\city.xlsx', 'file_F': 'lists\\army.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'cold', 'name_F': 'black', 'file_N': 'lists\\cold.xlsx', 'file_F': 'lists\\black.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'girl', 'name_F': 'cry', 'file_N': 'lists\\girl.xlsx', 'file_F': 'lists\\cry.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'high', 'name_F': 'dead', 'file_N': 'lists\\high.xlsx', 'file_F': 'lists\\dead.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'mountain', 'name_F': 'devil', 'file_N': 'lists\\mountain.xlsx', 'file_F': 'lists\\devil.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'music', 'name_F': 'fear', 'file_N': 'lists\\music.xlsx', 'file_F': 'lists\\fear.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'},
      {'name_N': 'river', 'name_F': 'hate', 'file_N': 'lists\\river.xlsx', 'file_F': 'lists\\hate.xlsx', 'folder': 'lists\\', 'file_type': '.xlsx'}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
    Routine lists_order
  LoopTerminator lists_names
  Routine orgenize_blocks
  LoopInitiator blocks_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine part_start
    LoopInitiator list_loop loopType="TrialHandler"
      loopType = random
      nReps = 8
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      Routine list_part
      LoopInitiator loading_words loopType="TrialHandler"
        Selected rows = 1:13
        conditionsFile = $blocks[block_counter][list_counter][0]
        isTrials = False
        loopType = random
        nReps = 1
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        Routine words_loader
        Routine empty_test
      LoopTerminator loading_words
      LoopInitiator target_word_loop loopType="TrialHandler"
        Selected rows = 0
        conditionsFile = $blocks[block_counter][list_counter][0]
        loopType = random
        nReps = 1
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        Routine insert_target_word
      LoopTerminator target_word_loop
      LoopInitiator insert_other_lists loopType="TrialHandler"
        Selected rows = 13:15
        conditionsFile = $blocks[block_counter][list_counter][0]
        isTrials = False
        loopType = sequential
        nReps = 1
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        Routine insert_other
      LoopTerminator insert_other_lists
      Routine record_lists
    LoopTerminator list_loop
    Routine start_test
    LoopInitiator test_loop loopType="TrialHandler"
      loopType = sequential
      nReps = len(words)
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      Routine test
    LoopTerminator test_loop
    Routine record_block
  LoopTerminator blocks_loop
  Routine end_block
